OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.7.0)
Comment
  Alpha Dash: OpenBCI GUI LSL data enters OpenViBE, selects frontal Fp1/Fp2 from hardware channels 1/2 and posterior O1/Oz/O2/Pz from hardware channels 15/14/16/13, applies a 1-30 Hz band-pass, and creates 0.9 s epochs every 0.1 s. The Python Box estimates posterior 8-13 Hz alpha relative power and detects blink transients using robust MAD thresholds, hysteresis, and refractory locking. A confirmed blink emits Label 01 and sends /openvibe/blink to brain_bridge.py.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "Frontal + posterior channels"
  Channel List = 1;2;15;14;16;13
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "EEG band filter 1-30 Hz"
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 30
-> Time based epoching "Low latency epoching"
  Epoch 1 duration (in sec) = 0.9
  Epoch 1 intervals (in sec) = 0.1
-> Alpha + blink controller
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/alpha_blink_openvibe_controller.py
  Blink absolute threshold = 35
  Blink z threshold = 5
  Blink refractory seconds = 0.55
  Bridge URL = http://127.0.0.1:8766
-> Stimulation listener
  Log level to use = Information
